<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:aeon="clr-namespace:Aeon.Acquisition;assembly=Aeon.Acquisition"
                 xmlns:pylon="clr-namespace:Bonsai.Pylon;assembly=Bonsai.Pylon"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Description>Contains control and acquisition functionality for arena Basler video capture devices.</Description>
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="TriggerSource" Description="The PWM trigger source used to drive the camera." />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>GlobalTrigger</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="SerialNumber" />
        <Property Name="ParameterFile" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="aeon:PylonCapture">
          <pylon:GrabStrategy>OneByOne</pylon:GrabStrategy>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="aeon:ObserveOnTaskPool" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="FrameEvents" Description="The name of the output sequence containing all frame events from the video source." />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>FrameEvents</Name>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="5" To="6" Label="Source2" />
      <Edge From="6" To="7" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>