<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.0-alpha0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Description>Delivers a single pellet to the specified patch when the input source raises an event.</Description>
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="PatchEvents" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>PatchEvents</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:FilterMessage">
          <harp:Address>35</harp:Address>
          <harp:MessageType>Write</harp:MessageType>
        </Combinator>
      </Expression>
      <Expression xsi:type="harp:Parse">
        <harp:Type>TimestampedU8</harp:Type>
        <harp:IsArray>false</harp:IsArray>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>TriggerPellet</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                <Value>128</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="DeliverPellet" />
      </Expression>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>DeliverPellet</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TriggeredWindow">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="8" Label="Source1" />
      <Edge From="5" To="7" Label="Source2" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="7" To="10" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>