<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:aeon="clr-namespace:Aeon.Vision.Sleap;assembly=Aeon.Vision.Sleap"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:sleap="clr-namespace:Bonsai.Sleap;assembly=Bonsai.Sleap"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Description>Extracts pose tracking information from an image sequence given the specified inference model.</Description>
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.Image</Selector>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="PathPrefix" Description="The optional root folder containing all pretrained models." />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="ModelPath" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="aeon:CreatePoseTrackingMetadata">
          <aeon:ModelPath />
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="PoseTrackingMetadata" Description="The name of the subject storing model metadata." />
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>PoseTrackingMetadata</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="ModelFileName" Selector="ModelFileName" />
          <Property Name="TrainingConfig" Selector="TrainingConfig" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="CentroidMinConfidence" />
        <Property Name="IdentityMinConfidence" />
        <Property Name="PartMinConfidence" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="sleap:PredictPoseIdentities">
          <sleap:CentroidMinConfidence xsi:nil="true" />
          <sleap:IdentityMinConfidence xsi:nil="true" />
          <sleap:PartMinConfidence xsi:nil="true" />
          <sleap:ScaleFactor xsi:nil="true" />
          <sleap:ColorConversion xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Seconds</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:CreateTimestamped" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="PoseTrackingEvents" Description="The name of the output sequence containing all pose tracking data." />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>PoseTrackingEvents</Name>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="11" Label="Source1" />
      <Edge From="1" To="10" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="5" To="7" Label="Source1" />
      <Edge From="6" To="7" Label="Source2" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="10" Label="Source2" />
      <Edge From="9" To="10" Label="Source3" />
      <Edge From="10" To="12" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="15" Label="Source1" />
      <Edge From="14" To="15" Label="Source2" />
      <Edge From="15" To="16" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>